{
    "actions": {
        "acqdatetime": {
            "filters": {},
            "params": {}
        },
        "earlsuv": {
            "filters": {},
            "params": {
                "half_life_secs": "6540",
                "phantom_vol": "9293"
            }
        }
    },
    "manual_input": {
        "acq_date": {
            "desc": "Acquisition date (yyyy-mm-dd)",
            "type": "date",
            "val": "(0008,0022)",
            "required": "true"
        },
        "acq_time": {
            "desc": "Acquisition time (hh:mm:ss)",
            "type": "time",
            "val": "(0008,0032)",
            "required": "true"
        },
        "dose_bg": {
            "desc": "Phantom dose (MBq)",
            "type": "float",
            "val": "0",
            "required" : "true"
        },
        "dose_bg_date": {
            "desc": "Phantom dose date (yyyy-mm-dd)",
            "type": "date",
            "val": "(0008,0022)",
            "required" : "true"
        },
        "dose_bg_time": {
            "desc": "Phantom dose time (hh:mm:ss)",
            "type": "time",
            "required" : "true"
        },
        "residual_dose_bg": {
            "desc": "Residual dose (MBq)",
            "type": "float",
            "val": "0",
            "required" : "true"
        },
        "residual_dose_bg_date": {
            "desc": "Residual dose date (yyyy-mm-dd)",
            "type": "date",
            "val": "(0008,0022)",
            "required" : "true"
        },
        "residual_dose_bg_time": {
            "desc": "Residual dose time (hh:mm:ss)",
            "type": "time",
            "required" : "true"
        }
    },
    "cfgformat": "20180910",
    "comments": {
        "author": "Dennis/Tim",
        "creator": "generate_config_json.py version 20180912",
        "description": "Analysis of EARLSUV phantom",
        "version": "20200205"
    },
    "info": {
        "acqdatetime": {
            "params": {}
        },
        "header_series": {
            "params": {}
        },
        "iq_analysis": {
            "params": {
                "art_borderpx_lrtb": "skip this number of pixels in artefact evaluation for left, right, top, bottom of image"
            }
        }
    }
}
